PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'order [1: single-dual or 2: dual-single]': '1', 'refresh rate (Hz)': '60', 'language': 'en'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.1
  Window size (pixels) = [1920, 1080]
  color = $[-0.75,-0.75,-0.75]
  expName = AB
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent code_instr
      Code Type = Py
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      Begin Routine:
        # open files with instructions
        if block.thisN in [0,6]:
            if task == 'single':
                with open(f'{local_path}/instruction_singleTask.txt', 'r') as file:
                    text_instructions.text = file.read()
            if task == 'dual':
                with open(f'{local_path}/instruction_dualTask.txt', 'r') as file:
                    text_instructions.text = file.read()
        else:
            continueRoutine = False
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T2_probe
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    TextComponent text_T2
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $T2
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    TextComponent text_blank_T2_probe
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine Ask_T1
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    TextComponent blankT1_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T1ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = ?
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    TextComponent blankT1_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T1
      allowedKeys = 'f','j'
      correctAns = $responseT1
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if task == 'single':
            continueRoutine = False
      End Routine:
        if task == 'dual':
            print(f'Corr T1: {key_resp_T1.corr}')
            if key_resp_T1.corr:
                counter_T1 += 1
            if (trial.thisN+1)%10 == 0:
                print(f'\n Accuracy T1: {counter_T1/10}\n')
                counter_T1 = 0
  Routine Ask_T2
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    TextComponent blankT2_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_T2ask
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = ?
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    TextComponent blankT2_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_T2
      allowedKeys = 'f','j'
      correctAns = $responseT2
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      End Routine:
        print(f'Corr T2: {key_resp_T2.corr}')
        if key_resp_T2.corr:
            counter_T2 += 1
        if (trial.thisN+1)%10 == 0:
            print(f'\n Accuracy T2: {counter_T2/10}')
            counter_T2 = 0
  Routine T0_context
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    TextComponent context_word
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $T0
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    TextComponent blankContext
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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  Routine distractors_T1
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    CodeComponent skipLoop_ifLag1
      Code Type = Py
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      Begin Routine:
        if lagT1 == 1:
             continueRoutine = False
             thisExp.addData('distractor_T1','')
        else:
            i += 1
            thisExp.addData('distractor_T1',distractors_trial[i])
      End Routine:
        if lagT1 == 1 or trials_T1.thisN == lagT1-2:
            trials_T1.finished = True
    TextComponent text_distr_T1
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $distractors_trial[i]
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    TextComponent text_blank_distractors_T1
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        # skip rest after last block
        if block.thisN+1 == 12:
            continueRoutine = False
    TextComponent text_rest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $txt_rest
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    KeyboardComponent press_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine distractors_T2
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    CodeComponent breakLoop_T2
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('distractor_T2',distractors_trial[i])
      End Routine:
        i += 1
        if trials_T2.thisN == lagT2-1:
            trials_T2.finished = True
    TextComponent text_distr_T2
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $distractors_trial[i]
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    TextComponent text_blank_distractors_T2
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine distractors_T0
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    CodeComponent breakLoop_T0
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('distractor_T0',distractors_trial[i])
      End Routine:
        i += 1
        if trials_T0_context.thisN == lagT0-2:
            trials_T0_context.finished = True
    TextComponent text_distr_T0
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $distractors_trial[i]
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    TextComponent text_blank_distractors_T0
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine T1_number
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    TextComponent text_T1
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = dur_frames_stim
      text [set every repeat] = $str(int(T1))
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    TextComponent text_blank_number_T1
      letterHeight = 0.05
      startVal [frame N] = dur_frames_stim
      stopVal [duration (frames)] = dur_frames_blank
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  Routine T1_num
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    TextComponent text_T1_num
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.083
      text [set every repeat] = $str(int(T1))
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  Routine set_trial
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    CodeComponent code_trial
      Code Type = Py
      Begin Routine:
        distractors_trial = list(distractors_df.dist[dist_idx:dist_idx+18])
        i = 0 # distractor index
        print(f'\nTrial #{trial.thisN+1}')
      End Routine:
        dist_idx += 18
  Routine end
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    TextComponent text_thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $txt_thanks
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  Routine set_block
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    CodeComponent settings_code
      Code Type = Py
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      Begin Experiment:
        import random
        import pandas as pd

        #local path to language
        local_path = 'languages/'+expInfo['language']

        with open(f'{local_path}/rest.txt', 'r') as file:
            txt_rest = file.read()

        with open(f'{local_path}/thanks.txt', 'r') as file:
            txt_thanks = file.read()

        # duration in frames
        #dur_frames = round(0.083 * int(expInfo['refresh rate (Hz)']))
        dur_frames_stim = round(0.033 * int(expInfo['refresh rate (Hz)']))
        dur_frames_blank = round(0.050 * int(expInfo['refresh rate (Hz)']))

        # set trials order
        n = 30 # num of related and unrelated trials
        related_idx = list(range(360))
        unrelated_idx = list(range(360,720))
        random.shuffle(related_idx)
        random.shuffle(unrelated_idx)

        # read file with distractors
        distractors_df = pd.read_csv(f'{local_path}/distractors.csv')
        distractors_df = distractors_df.sample(frac = 1)
        dist_idx = 0

        # feedback counters
        counter_T1 = 0
        counter_T2 = 0
      Begin Routine:
        # set blocks order
        task = task1 if expInfo['order [1: single-dual or 2: dual-single]']=='1' else task2

        # choose rows for this trial
        trials_in_block = related_idx[-n:] + unrelated_idx[-n:]
        shuffle(trials_in_block)
        related_idx = related_idx[:len(related_idx)-n]
        unrelated_idx = unrelated_idx[:len(unrelated_idx)-n]

        # log
        print(f'\nBlock #{block.thisN+1}\nTask: {task}\n')
Flow
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = task_type.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'single', 'task2': 'dual'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'},
      {'task1': 'dual', 'task2': 'single'}]
    Routine set_block
    Routine instructions
    LoopInitiator trial loopType="TrialHandler"
      Selected rows = $trials_in_block
      conditionsFile = $f'{local_path}/wordPairs.xlsx'
      loopType = sequential
      nReps = 1
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      conditions:
        [{'T0': 'HANDS', 'T2': 'XXFEETX', 'T1': 8888888.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'STORE', 'T2': 'XXSHOPX', 'T1': 2222222.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'CURTAIN', 'T2': 'XDRAPEX', 'T1': 5555555.0, 'lagT0': 10, 'lagT1': 3, 'lagT2': 7, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'CAT', 'T2': 'XKITTEN', 'T1': 5555555.0, 'lagT0': 7, 'lagT1': 3, 'lagT2': 10, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'PONDER', 'T2': 'XTHINKX', 'T1': 3333333.0, 'lagT0': 7, 'lagT1': 7, 'lagT2': 6, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'BAG', 'T2': 'XXSACKX', 'T1': 9999999.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'STRAW', 'T2': 'XXHAYXX', 'T1': 9999999.0, 'lagT0': 10, 'lagT1': 3, 'lagT2': 7, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'WEEDS', 'T2': 'XROOTSX', 'T1': 9999999.0, 'lagT0': 7, 'lagT1': 7, 'lagT2': 6, 'responseT1': 'f', 'responseT2': 'f', 'related': 1},
        {'T0': 'PROMISE', 'T2': 'XPLEDGE', 'T1': 6666666.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1},
        {'T0': 'PROFIT', 'T2': 'XXLOSSX', 'T1': 2222222.0, 'lagT0': 10, 'lagT1': 7, 'lagT2': 3, 'responseT1': 'j', 'responseT2': 'f', 'related': 1}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
      Routine set_trial
      Routine T0_context
      LoopInitiator trials_T0_context loopType="TrialHandler"
        loopType = sequential
        nReps = 10
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        Routine distractors_T0
      LoopTerminator trials_T0_context
      Routine T1_number
      LoopInitiator trials_T1 loopType="TrialHandler"
        loopType = sequential
        nReps = 7
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        Routine distractors_T1
      LoopTerminator trials_T1
      Routine T2_probe
      LoopInitiator trials_T2 loopType="TrialHandler"
        loopType = sequential
        nReps = 12
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        Routine distractors_T2
      LoopTerminator trials_T2
      Routine Ask_T1
      Routine Ask_T2
    LoopTerminator trial
    Routine rest
  LoopTerminator block
  Routine end
